PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['身分證字號'], expName, timeStr)
  Experiment info = {'身分證字號': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = GoFitts
  keyboardBackend = ioHub
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Routines
  Routine init
    RoutineSettingsComponent init
      saveStartStop = False
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    TextComponent text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        接下來我們要開始進行作業，一共有六個段落

        作業進行時請您快速又準確地移動滑鼠游標至紫色圓圈中

        移動至紫色圓圈後無需按滑鼠左鍵

        請按 Enter 鍵繼續
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code
      Code Type = JS
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      Before JS Experiment:
        // The target that cursor currently is in, -1 = no target
        var cursor_in_target = -1;
        var enter_timestamp = 0;
        var target_done_timestamp = 0;

        // on leave
        function on_leave_target() {
            console.log("left target", cursor_in_target);

            // unpaint
            const target = targets[target_order[current_target]];
            target.fillColor = HIGHLIGHT_COLOR;
            target.draw();

            cursor_in_target = -1;
            // reset dwell time
            enter_timestamp = 0;

            if (first_leave) {
                psychoJS.experiment.addData('leave_time', mouse.mouseClock.getTime());
                console.log("first leave target");
                first_leave = false;
            }
        }

        // on enter
        function on_enter_target(target_idx) {
            console.log("entered target", target_idx);

            cursor_in_target = target_idx;

            // paint
            const target = targets[target_order[cursor_in_target]];
            target.fillColor = DWELLED_COLOR;
            target.draw();

            enter_timestamp = mouse.mouseClock.getTime();
            psychoJS.experiment.addData('enter_time', mouse.mouseClock.getTime());
        }
      Begin JS Routine:
        if (current_target == 0) {
            psychoJS.experiment.addData('from', [...mouse.getPos()]);
            // can't reset mouse position!
        } else {
            from_t = targets[target_order[current_target - 1]];
            psychoJS.experiment.addData('from', [...from_t.pos]);
        }

        for (var idx, _pj_c = 0, _pj_a = util.range(targets.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            idx = _pj_a[_pj_c];
            let target = targets[idx];
            if ((idx === target_order[current_target])) {
                target.fillColor = HIGHLIGHT_COLOR;
            } else {
                target.fillColor = NORMAL_COLOR;
            }
            target.draw();
        }

        // reset
        first_leave = true
        enter_timestamp = 0;

        to_t = targets[target_order[current_target]];
        psychoJS.experiment.addData('to', [...to_t.pos]);
        psychoJS.experiment.addData('w', target_w);
        psychoJS.experiment.addData('a', target_a);
        psychoJS.experiment.addData('id', target_id);

        psychoJS.experiment.addData('sequence_loop.thisN', sequence_loop.thisN);
      Each JS Frame:
        if (current_target != target_c) {
            // check dwell time
            if (enter_timestamp > 0) {
                const cur_timestamp = mouse.mouseClock.getTime();
                if (cur_timestamp - enter_timestamp > DWELL_TIME_SECS) {
                    enter_timestamp = 0
                    target_done_timestamp = mouse.mouseClock.getTime();
                    cur_target_circle = targets[target_order[current_target]]
                    cur_target_circle.fillColor = NORMAL_COLOR;
                }
            }

            if (target_done_timestamp > 0) {
                const cur_timestamp = mouse.mouseClock.getTime();
                if (cur_timestamp - target_done_timestamp > TARGET_INTERVAL_SECS) {
                    continueRoutine = false;
                    target_done_timestamp = 0;
                    console.log("next target");
                }
            }

            if (mouse.mouseMoved()) {
                let [x, y] = mouse.getPos();
                // enter
                if (cursor_in_target < 0 && is_in_target(x, y, current_target)) {
                    on_enter_target(current_target);
                }

                // leave
                if (cursor_in_target >= 0 && !is_in_target(x, y, cursor_in_target)) {
                    on_leave_target(cursor_in_target);
                }
            }
        }
      End JS Routine:
        if (current_target + 1 == target_c) {
            for (let target of targets) {
                target.hide();
            }
        }
        current_target += 1;
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine sequence_start
    RoutineSettingsComponent sequence_start
      saveStartStop = False
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        if (TEST_MODE) {
            target_c = TEST_TARGET_COUNT;
            parameters = TEST_PARAMETERS;
        } else {
            target_c = PROD_TARGET_COUNT;
            parameters = PROD_PARAMETERS;
        }

        util.shuffle(parameters);

        mouse.getPos();
        [target_a, target_w, target_id] = parameters.pop();
        if (TEST_MODE) {
            console.log("target_a:", target_a);
            console.log("target_w:", target_w);
            console.log("target_id:", target_id);
        }

        // Re-initalization
        targets = [];
        current_target = 0;
        target_order = [];

        // Add circle
        for (var i, _pj_c = 0, _pj_a = util.range(target_c), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let x = ((target_a / 2) * Math.cos(((2.0 * pi) * (i / target_c))));
            let y = ((target_a / 2) * Math.sin(((2.0 * pi) * (i / target_c))));
            // size is the "diameter" of the circle, not radius
            let target = new visual.Polygon({"win": psychoJS.window, "size": target_w, "pos": [x, y], "fillColor": "white", "lineWidth": 2, "lineColor": LINE_COLOR, "edges": 100});
            targets.push(target);
        }

        // Filling target order
        let start = util.randint(0, (target_c - 1));
        const interval = Number.parseInt(((target_c + 1) / 2));
        let idx = 0;
        while ((idx < target_c)) {
            target_order.push((start % target_c));
            idx += 1;
            if ((idx < target_c)) {
                target_order.push(((start + interval) % target_c));
                idx += 1;
            }
            start += 1;
        }
      End JS Experiment:
        message = "實驗已結束，感謝您的參與"
    TextComponent seq_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 按下Enter鍵開始
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    KeyboardComponent seq_start_confirm
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_mouse
    RoutineSettingsComponent test_mouse
      saveStartStop = False
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    CodeComponent experiment_code
      Code Type = JS
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      Before JS Experiment:
        // Experiment Settings
        const HIGHLIGHT_COLOR = "#CCCCFF";
        const NORMAL_COLOR = "#FFFFFF";
        const DWELLED_COLOR = "#F5EF42";
        const LINE_COLOR = "#6A6A6A";

        const TEST_MOUSE_TARGET_COUNT = 4;
        const TEST_MOUSE_PARAMETERS = [[700, 40]];

        const DWELL_TIME_SECS = 0.5;
        const TARGET_INTERVAL_SECS = 0.2;

        const TEST_TARGET_COUNT = 15;
        const TEST_IDS = [6.32, 6.32];

        const PROD_TARGET_COUNT = 15;
        const PROD_IDS = [3.75, 4.32, 4.75, 5.32, 5.75, 6.32];

        const TEST_MODE = false;

        // input: id, output: [a, w]
        function generate_parameters(id) {
            const coef = (Math.pow(2, id) - 1) / 2;
            const w_ub = Math.floor(960 / (2 + coef));
            w = util.randint(20, w_ub);
            a = coef * w;
            return [a, w, id];
        }

        const TEST_PARAMETERS = [];
        const PROD_PARAMETERS = [];

        // fill parameters
        for (let id of TEST_IDS) {
            TEST_PARAMETERS.push(generate_parameters(id));
        }
        for (let id of PROD_IDS) {
            PROD_PARAMETERS.push(generate_parameters(id));
        }

        var target_c = TEST_MODE ? TEST_TARGET_COUNT : PROD_TARGET_COUNT;
        var parameters = TEST_MODE ? TEST_PARAMETERS : PROD_PARAMETERS;

        // for loop variables
        const n_seqs = TEST_MODE ? TEST_PARAMETERS.length : PROD_PARAMETERS.length;
        const n_trials = TEST_MODE ? TEST_TARGET_COUNT : PROD_TARGET_COUNT;

        // variables that needs to be referenced else where
        var targets = [];
        var target_order = [];
        var current_target = 0;

        var target_w = 0;
        var target_a = 0;
        var target_id = 0;
        var retry = 999;

        // trial targets (object)
        var from_t, to_t;

        function is_in_target(x, y, target_idx) {
            if (target_idx >= 0 && target_idx < target_c) {
                let tx, ty;
                [tx, ty] = targets[target_order[target_idx]].pos;
                return ((Math.pow((x - tx), 2) + Math.pow((y - ty), 2)) <= Math.pow(target_w / 2, 2));
            }
            return false;
        }

        // manually add expInfo
        util.addInfoFromUrl(expInfo);

        var timeStr = (new Date()).toISOString();
      Begin JS Routine:
        target_c = TEST_MOUSE_TARGET_COUNT;
        parameters = TEST_MOUSE_PARAMETERS;

        mouse.getPos();
        [target_a, target_w, target_id] = parameters[0];

        // Re-initalization
        targets = [];
        current_target = 0;
        target_order = [];

        // Add circle
        for (var i, _pj_c = 0, _pj_a = util.range(target_c), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            let x = ((target_a / 2) * Math.cos(((2.0 * pi) * (i / target_c))));
            let y = ((target_a / 2) * Math.sin(((2.0 * pi) * (i / target_c))));
            let target = new visual.Polygon({"win": psychoJS.window, "size": target_w, "pos": [x, y], "fillColor": "white", "lineWidth": 2, "lineColor": LINE_COLOR, "edges": 100});
            targets.push(target);
        }

        // Filling target order
        let idx = 0;
        while (idx < target_c) {
            target_order.push(idx);
            idx += 1;
        }
      Each JS Frame:
        if (current_target != target_c) {
            for (var idx, _pj_c = 0, _pj_a = util.range(targets.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                idx = _pj_a[_pj_c];
                let target = targets[idx];
                if ((idx === target_order[current_target])) {
                    target.fillColor = HIGHLIGHT_COLOR;
                } else {
                    target.fillColor = NORMAL_COLOR;
                }
                target.draw();
            }
            if (mouse.mouseMoved()) {
                let [x, y] = mouse.getPos();
                if (is_in_target(x, y, current_target)) {
                    if (current_target + 1 == target_c) {
                        continueRoutine = false;
                    } else {
                        current_target += 1;
                    }
                }
            }
        }
      End JS Routine:
        for (let target of targets) {
            target.hide();
        }
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent test_instruction_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        請移動滑鼠游標，
        分別到上下左右四個圓圈範圍內
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        歡迎參加目標點擊作業！

        本實驗需由全螢幕進行，請勿按 Esc 離開全螢幕

        實驗進行時請您快速又準確地移動滑鼠游標至紫色圓圈中

        開始進行作業前，先確認您能順利地操作滑鼠

        請按 Enter 鍵繼續
    KeyboardComponent welcome_confirm
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine confirmation
    RoutineSettingsComponent confirmation
      saveStartStop = False
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    CodeComponent retry
      Code Type = JS
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      End JS Routine:
        if (test_confirm.keys === "return") {
            retry_testing.finished = true;
        }
    TextComponent test_confirm_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        您剛才能夠順利操作滑鼠點擊四個目標圓圈嗎？
        如果不行的話，請調整桌面上滑鼠的操作空間，
        以及您使用滑鼠的姿勢，讓您可以順利地操作。

        若您已經可以順利操作，請按Enter鍵繼續
        若您需要調整滑鼠及姿勢，請按空白鍵重試
    KeyboardComponent test_confirm
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    ImageComponent image
      image = saving.jpg
      pos = (0, 80)
      saveStartStop = False
      size = (1086, 558)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine welcome
  LoopInitiator retry_testing loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine test_mouse
    Routine confirmation
  LoopTerminator retry_testing
  Routine init
  LoopInitiator sequence_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_seqs
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    Routine sequence_start
    LoopInitiator trial_loop loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine trial
    LoopTerminator trial_loop
  LoopTerminator sequence_loop
  Routine end
